opentrons/protocol-designer 5.2.6
schemaVersion: 3
protocolName: Sugar - Phenol & Sulfuric
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_multi_gen2: {mount: left}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Filter Tip Rack 200 µL: {definitionId: opentrons/opentrons_96_filtertiprack_200ul/1, slot: 10}
  Samples: {definitionId: opentrons/nest_96_wellplate_200ul_flat/1, slot: 1}
  Sample Blanks: {definitionId: opentrons/nest_96_wellplate_200ul_flat/1, slot: 2}
  water: {definitionId: opentrons/agilent_1_reservoir_290ml/1, slot: 6}
  sulfuric: {definitionId: opentrons/nest_1_reservoir_195ml/1, slot: 11}
  phenol: {definitionId: opentrons/nest_1_reservoir_195ml/1, slot: 8}
pipetteTiprackAssignments:
  p300_multi_gen2: opentrons/opentrons_96_filtertiprack_200ul/1
ingredients:
  - Phenol
  - Sulfuric
  - Samples
  - dH20
ingredLocations:
  Sample Blanks:
    Samples {volume: 40}: A1-H1, A2-H2, A3-G3, A4-G4, H3-H6, A5-G5, A6-G6
  Samples:
    Samples {volume: 40}: A1-H1, A2-H2, A3-G3, A4-G4, H3-H6, A5-G5, A6-G6
  water:
    dH20 {volume: 15000}: A1
  sulfuric:
    Sulfuric {volume: 15000}: A1
  phenol:
    Phenol {volume: 15000}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 50
  path: single
  changeTip: once
  aspirate_labware: phenol
  aspirate_wells: A1
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  aspirate_mmFromBottom: 10
  dispense_labware: Samples
  dispense_wells: A1-A9
  dispense_mmFromBottom: 10
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 50
  path: single
  changeTip: once
  aspirate_labware: water
  aspirate_wells: A1
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  aspirate_mmFromBottom: 10
  dispense_labware: Sample Blanks
  dispense_wells: A1-A9
  dispense_mmFromBottom: 10
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: pause
  stepName: pause
  pauseAction: untilResume
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 125
  path: single
  changeTip: once
  aspirate_labware: sulfuric
  aspirate_wells: A1
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 200
  aspirate_mmFromBottom: 10
  dispense_labware: Samples
  dispense_wells: A1-A9
  dispense_flowRate: 200
  dispense_mmFromBottom: 20.5
  blowout_checkbox: true
  blowout_location: dest_well
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 125
  path: single
  changeTip: once
  aspirate_labware: sulfuric
  aspirate_wells: A1
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 200
  aspirate_mmFromBottom: 10
  dispense_labware: Sample Blanks
  dispense_wells: A1-A9
  dispense_flowRate: 200
  dispense_mmFromBottom: 20.5
  blowout_checkbox: true
  blowout_location: dest_well
  preWetTip: true
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p300_multi_gen2, labware: Opentrons 96 Filter Tip Rack 200 µL, well: A1}
- aspirate: {pipette: p300_multi_gen2, volume: 50, labware: phenol, well: A1, offsetFromBottomMm: 10, flowRate: 94}
- dispense: {pipette: p300_multi_gen2, volume: 50, labware: Samples, well: A1, offsetFromBottomMm: 10, flowRate: 94}
- blowout: {pipette: p300_multi_gen2, labware: Samples, well: A1, flowRate: 94, offsetFromBottomMm: 10.8}
- aspirate: {pipette: p300_multi_gen2, volume: 50, labware: phenol, well: A1, offsetFromBottomMm: 10, flowRate: 94}
- dispense: {pipette: p300_multi_gen2, volume: 50, labware: Samples, well: A2, offsetFromBottomMm: 10, flowRate: 94}
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