opentrons/protocol-designer 5.2.6
schemaVersion: 3
protocolName: Sugar - Phenol & Sulfuric
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_multi_gen2: {mount: left}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Filter Tip Rack 200 µL: {definitionId: opentrons/opentrons_96_filtertiprack_200ul/1, slot: 10}
  Samples: {definitionId: opentrons/nest_96_wellplate_200ul_flat/1, slot: 1}
  sulfuric: {definitionId: opentrons/agilent_1_reservoir_290ml/1, slot: 7}
pipetteTiprackAssignments:
  p300_multi_gen2: opentrons/opentrons_96_filtertiprack_200ul/1
ingredients:
  - Phenol
  - Sulfuric
  - Samples
  - 75% Sulfuric
ingredLocations:
  Samples:
    Samples {volume: 50}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, B12-H12, A12
  sulfuric:
    75% Sulfuric {volume: 200000}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 200
  path: single
  changeTip: once
  aspirate_labware: sulfuric
  aspirate_wells: A1
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  dispense_labware: Samples
  dispense_wells: A1-A12
  dispense_flowRate: 200
  dispense_mmFromBottom: 20.5
  blowout_checkbox: true
  blowout_location: dest_well
  preWetTip: true
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p300_multi_gen2, labware: Opentrons 96 Filter Tip Rack 200 µL, well: A1}
- aspirate: {pipette: p300_multi_gen2, volume: 200, labware: sulfuric, well: A1, offsetFromBottomMm: 1, flowRate: 94}
- dispense: {pipette: p300_multi_gen2, volume: 200, labware: sulfuric, well: A1, offsetFromBottomMm: 1, flowRate: 200}
- aspirate: {pipette: p300_multi_gen2, volume: 200, labware: sulfuric, well: A1, offsetFromBottomMm: 1, flowRate: 94}
- dispense: {pipette: p300_multi_gen2, volume: 200, labware: Samples, well: A1, offsetFromBottomMm: 20.5, flowRate: 200}
- blowout: {pipette: p300_multi_gen2, labware: Samples, well: A1, flowRate: 200, offsetFromBottomMm: 10.8}
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